//Tools for multichannel images visualization and multiple opened images handling
//kevin.terretaz@gmail.com

//1.0 070221
//1.1 080221 forgotten adjustments + up to 7 Set LUTs
//1.2 150221 bugs correction (Splitviews, Max all)
//1.3 280221 add settings for composite switch and auto-contrast icon
		  // add toggle channels shortcuts tools.
//1.4 110421 gammaLUTs, better SplitView and all images channel toggle key
//2.0 040722 remove gamma icon, add multiTool icon (with gammaLUT inside), add borders to SplitView

/*This is free and unencumbered software released into the public domain.

Anyone is free to copy, modify, publish, use, compile, sell, or
distribute this software, either in source code form or as a compiled
binary, for any purpose, commercial or non-commercial, and by any
means.

In jurisdictions that recognize copyright laws, the author or authors
of this software dedicate any and all copyright interest in the
software to the public domain. We make this dedication for the benefit
of the public at large and to the detriment of our heirs and
successors. We intend this dedication to be an overt act of
relinquishment in perpetuity of all present and future rights to this
software under copyright law.

THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF
MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT.
IN NO EVENT SHALL THE AUTHORS BE LIABLE FOR ANY CLAIM, DAMAGES OR
OTHER LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE,
ARISING FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
OTHER DEALINGS IN THE SOFTWARE.

For more information, please refer to <http://unlicense.org/>
*/

requires("1.53c");  // minimal version for extended hex icon feature 

var mainTool = "Move Windows";
var middleClick = 0;
var enhance_rate = 0.03;
var toolList = newArray("Move Windows",	"Contrast Adjuster", "Gamma on LUT", "slice / frame scroll" );

macro "Multitool Tool - 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" {
	multiTool();
}
macro "Multitool Tool Options" {
	Dialog.createNonBlocking("Options");
	Dialog.addRadioButtonGroup("Main Tool : ", toolList, toolList.length, 1, mainTool);
	Dialog.addCheckbox("middle click run macro from clipboard", middleClick);
	Dialog.show();
	mainTool = Dialog.getRadioButton();
	middleClick =  Dialog.getCheckbox();
}

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast of the active channel between the min and max of all slices, not just the active one.
----------------------------------------------------------------------------------------------------------------------*/
macro "Auto contrast (right click for options) Action Tool-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" {
	//	get pref
	constrast_pref = call("ij.Prefs.get","Contrast.icon","All channels");
	//	Action depending on prefs, default is All channel.
	if (constrast_pref == "Active channel")	{
		Reset_contrast();
	}
	if (constrast_pref == "All channels")	{
		run("Auto-contrast on all channels");
	}
}

macro "Auto contrast (right click for options) Action Tool Options"{
	Dialog.createNonBlocking("Auto-contrast icon settings");
	Dialog.addChoice("For auto-contrast icon tool, adjust on :", newArray("Active channel","All channels"), "Active channel");
	Dialog.addMessage("shortcuts reminder : \n[r] key for active channel auto-contrast\n[R] for all channels.")
	Dialog.show();
	call("ij.Prefs.set","Contrast.icon",Dialog.getChoice());
}

/*----------------------------------------------------------------------------------------------------------------------
Right click on any image window to open this menu.
Same popup menu than the original, plus the "Set LUTs" and "Add note in info" macros. Cutomizable.
----------------------------------------------------------------------------------------------------------------------*/
var pmCmds = newMenu("Popup Menu",
	newArray("Set LUTs", "Rename...", "Duplicate...", "Original Scale", "Scale to Fit",
		"Add note in info","-","Record...", "Capture Screen ", "Monitor Memory...",
		"Find Commands...", "Control Panel...", "Startup Macros...", "Search..."));
macro "Popup Menu" {
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}

/*----------------------------------------------------------------------------------------------------------------------
Menu for SplitView tools and help
----------------------------------------------------------------------------------------------------------------------*/
// var zCmds = newMenu("SplitView tools Menu Tool",
// 	newArray("Colored squared SplitView [S]","Grayscaled linear SplitView[p]","Special SplitView","About SplitView"));
// macro"SplitView tools Menu Tool - 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"{
// 	cmd = getArgument();
// 	if (cmd=="Colored squared SplitView [S]")	SplitView(1,1,0);
// 	if (cmd=="Grayscaled linear SplitView[p]")	SplitView(0,0,0);
// 	if (cmd=="Special SplitView")				getSplitViewPrefs();
// 	if (cmd=="About SplitView") run("About SplitView");
// }

/*----------------------------------------------------------------------------------------------------------------------
SplitView action tool with options dialog
----------------------------------------------------------------------------------------------------------------------*/
macro "SplitView Action Tool (right click for help) - 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"{
	getSplitViewPrefs();
}
macro "SplitView Action Tool (right click for help) Options"{
	run("About SplitView");
}


/*----------------------------------------------------------------------------------------------------------------------
This menu is for macro tools that acts on all opened images
----------------------------------------------------------------------------------------------------------------------*/
var yCmds = newMenu("All opened images tools Menu Tool",
	newArray("Reset all contrasts","Set all LUTs","Maximum Z project all","Save all"));
macro"All opened images tools Menu Tool - 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"{
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}

/*----------------------------------------------------------------------------------------------------------------------
This menu is for macro tools to make a "false gamma" applied on LUTs
----------------------------------------------------------------------------------------------------------------------*/
// var gammaLUTmenu = newMenu("Gamma LUT Menu Tool",
// 	newArray("Set gammaLUT on active channel","Try gammaLUT on active channel","Set same GammaLUT on all channels", "Set gammaLUT on all images"));
// macro "Gamma LUT Menu Tool - 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"{
// 	cmd = getArgument();
// 	if (cmd=="set gammaLUT on active channel") askGammaLUT();
// 	if (cmd=="try gammaLUT on active channel") run("tryGammaLUT");
// 	if (cmd=="set same GammaLUT on all channels") run("gammaLUT on all channels");
// 	if (cmd=="set gammaLUT on all images") run("gammaLUT on all images");
// }

/*----------------------------------------------------------------------------------------------------------------------
Settings to customize actions of some tools
----------------------------------------------------------------------------------------------------------------------*/
macro "Settings Action Tool - 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" {
	Dialog.createNonBlocking("Visualization tools parameters");
	Dialog.addChoice("For auto-contrast icon tool, adjust on :", newArray("Active channel","All channels"), call("ij.Prefs.set","Contrast.icon", "Active channel"));
	Dialog.addChoice("[Q] key shortcut tool,switch between composite and :", newArray("Color","Grayscale","All modes"), call("ij.Prefs.get","Composite.switch","Color"));
	Dialog.show();
	call("ij.Prefs.set","Contrast.icon", Dialog.getChoice());
	call("ij.Prefs.set","Composite.switch", Dialog.getChoice());
}

/*----------------------------------------------------------------------------------------------------------------------
About menu
----------------------------------------------------------------------------------------------------------------------*/
var AboutCmds = newMenu("About Menu Tool",
	newArray("About these tools", "Keyboard shortcuts cheat sheet","LUTs and channels shortcuts cheat sheet"));
macro"About Menu Tool - B31C000T2e20?"{
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}

/*
//Built-in Stack and LUT menus 
 macro "Stacks Menu Built-in Tool" {}
 macro "LUT Menu Built-in Tool" {}
*/

//ispired by Robert Haase Windows Position tool from clij
function multiTool(){ //avec menu "que faire avec le middle click? **"
	/*
	* flags or modificator value of getCursorLoc :
	* shift = 1;
	* ctrl = 2;
	* cmd = 4;...
	* alt = 8; middle click is just 8
	* leftClick = 16;
	* so flag of leftclick + alt = 24
	*/
	getCursorLoc(x, y, z, flags);

	//setup : 
	setupUndo();
	call("ij.plugin.frame.ContrastAdjuster.update");

	if (flags>=32) flags -= 32; //remove "cursor in selection" flag
	if (flags == 8) { //middle mouse button
		if (middleClick) eval(String.paste);
		else compositeSwitch();
	}
	if (flags == 16) {
		if 			(mainTool=="Move Windows")       moveWindows();
		else if (mainTool=="Contrast Adjuster")      liveContrast();
		else if (mainTool=="Gamma on LUT")           liveGamma();
		else if (mainTool=="slice / frame scroll")   liveScroll();
	}
	if (flags == 17)				liveContrast();		// shift + long click
	if (flags == 18 || flags == 20)	liveGamma();		// ctrl(or cmd) + long click
	if (flags == 24)				liveScroll();		// alt + long click
	updateDisplay();
}

function moveWindows() {//laggy on Macs I don't know why..
	getCursorLoc(x2, y2, z2, flags2);
	zoom = getZoom();
	getCursorLoc(last_x, last_y, z, flags);
	while (flags == 16) {
		getLocationAndSize(window_x, window_y, null, null);
		getCursorLoc(x, y, z, flags);
		if (x != last_x || y != last_y) {
			window_x = window_x - (x2 * zoom - x * zoom);
			window_y = window_y - (y2 * zoom - y * zoom);
			setLocation(window_x, window_y);
			getCursorLoc(last_x, last_y, z, flags);
		}
	wait(10);
	}
}

function liveContrast() {	
	if (bitDepth() == 24) exit;
	resetMinAndMax();
	getMinAndMax(min, max);
	getCursorLoc(x, y, z, flags);
	if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
	while (flags >= 16) {			
		getCursorLoc(x, y, z, flags);
		getDisplayedArea(area_x, area_y, width, height);
		if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
		newMax = ((x - area_x) / width) * max;
		newMin = ((height - (y - area_y)) / height) * max / 2;
		if (newMax < 0) newMax = 0;
		if (newMin < 0) newMin = 0;
		if (newMin > newMax) newMin = newMax;
		setMinAndMax(newMin, newMax);
		call("ij.plugin.frame.ContrastAdjuster.update");
		wait(10);
	}
}

function liveGamma(){
	setBatchMode(1);
	getLut(reds, greens, blues);
	setColor("white");
	setFont("SansSerif", Image.height/20, "bold antialiased");
	getCursorLoc(x, y, z, flags);
	if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
	while (flags >= 16) {
		getCursorLoc(x, y, z, flags);
		getDisplayedArea(area_x, area_y, width, height);
		if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
		gamma = d2s(((x - area_x) / width) * 2, 2); if (gamma < 0) gamma=0;
		gammaLUT(gamma, reds, greens, blues);
		Overlay.remove;
		Overlay.drawString("gamma = " + gamma, Image.height / 30, Image.height / 20);
		Overlay.show;
		wait(10);
	}
	setBatchMode(0);
	Overlay.remove;
	run("Select None");
}

function liveScroll() {
	getDimensions(width, height, channels, slices, frames);
	if(slices==1 && frames==1) exit;
	getCursorLoc(x, y, z, flags);
	if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
	while(flags >= 16) {
		getCursorLoc(x, y, z, flags);
		getDisplayedArea(area_x, area_y, width, height);
		if (flags >= 32) flags -= 32; //remove "cursor in selection" flag
		if (frames > 1) Stack.setFrame(((x - area_x) / width) * frames);
		else 			Stack.setSlice(((x - area_x) / width) * slices);
		// if (live_autoContrast) run("Enhance Contrast", "saturated=&enhance_rate");
		call("ij.plugin.frame.ContrastAdjuster.update");
		wait(10);
	}
}

/*----------------------------------------------------------------------------------------------------------------------
SplitView : 
For multichannel visualization, 5 channel max
This macro will generate a montage of composite and splited channels in one RGB Image
You can still navigate through slices or frames. 
Note : the SplitView image size can be heavy on big hyperstacks due to RGB conversion
Advice : draw a selection before running Spliview, the produced montage will be croped
The new version can ask tu user channel labels and add it in the SplitView with color corresponding to each LUTs.
----------------------------------------------------------------------------------------------------------------------*/
var borderSize = 0;
var channels = 1;
var channel_Labels = newArray("GFP","RFP","DNA","Other","DIC");
var font_Size = 30;
var tile = newArray(1);

/*----------------------------------------------------------------------------------------------------------------------
main SplitView function : aguments works as follow :
color_Mode : 0 = grayscale , 1 = color 
montage_Style : 0 = linear montage , 1 = squared montage , 2 = vertical montage
labels : 0 = no , 1 = yes.
----------------------------------------------------------------------------------------------------------------------*/
function SplitView(color_Mode, montage_Style, labels) {
	setBatchMode(true);
	title = getTitle();
	saveSettings;
	Setup_SplitView(color_Mode, labels);//up until split
	restoreSettings;
	if (montage_Style==1)	squareView();
	if (montage_Style==0)	linearView();
	if (montage_Style==2)	verticalView();
	rename(title + " SplitView");
	setOption("Changes", 0);
	setBatchMode("exit and display");

	function Setup_SplitView(color_Mode, labels){
		setBackgroundColor(255,255,255);
		getDimensions(width, heigth, channels, Z, T);
		if (channels == 1) exit("only one channel");
		if (channels > 5)  exit("5 channels max");
		run("Duplicate...", "title=image duplicate");
		if ((Z>1)&&(T==1)) {T=Z; Z=1; Stack.setDimensions(channels,Z,T); } 
		tile = newArray(channels+1);	channels = channels;
		getDimensions(width,heigth,channels,Z,T);
		font_Size = heigth/9;
		run("Duplicate...", "title=split duplicate");
		run("Split Channels");
		selectWindow("image");
		Stack.setDisplayMode("composite")

		if (labels) {
			getLabels();
			setColor("white");
			setFont("SansSerif", font_Size, "bold antialiased");
			Overlay.drawString("Merge",heigth/20,font_Size);
			Overlay.show;
			run("Flatten","stack");
			rename("overlay"); tile[0] = getTitle();
			if(borderSize != 0) run("Canvas Size...", "width="+Image.width+borderSize+" height="+Image.height+borderSize+" position=Center");
			close("image");

			for (i = 1; i <= channels; i++) {
				selectWindow("C"+i+"-split");
				id = getImageID();
				getLut(reds, greens, blues); 
				setColor(reds[255], greens[255], blues[255]);
				if (!color_Mode) {
					getMinAndMax(min, max); 
					run("Grays"); 
					setMinAndMax(min, max);
				}
				Overlay.drawString(channel_Labels[i-1],heigth/20,font_Size);
				Overlay.show;
				if (Z*T>1) run("Flatten","stack");
				else { run("Flatten"); selectImage(id);	close();	}
				if(borderSize != 0) run("Canvas Size...", "width="+Image.width+borderSize+" height="+Image.height+borderSize+" position=Center");
				tile[i]=getTitle();
			}
		}
		else {
			run("RGB Color", "frames"); 
			rename("overlay"); tile[0] = getTitle(); 
			if(borderSize != 0) run("Canvas Size...", "width="+Image.width+borderSize+" height="+Image.height+borderSize+" position=Center");
			close("image");
			for (i = 1; i <= channels; i++) {
				selectWindow("C"+i+"-split");
				if (!color_Mode) {
					getMinAndMax(min, max); 
					run("Grays"); 
					setMinAndMax(min, max);
				}
				run("RGB Color", "slices"); 
				if(borderSize != 0) run("Canvas Size...", "width="+Image.width+borderSize+" height="+Image.height+borderSize+" position=Center");
				tile[i]=getTitle();	
			}
		}
	}
	
	function getLabels(){
		Dialog.createNonBlocking("Provide channel names");
		for (a = 0; a < 5; a++) Dialog.addString("Channel "+a+1, channel_Labels[a],12); 
		Dialog.addNumber("Font size", font_Size);
		Dialog.show();
		for (i = 0; i < 5; i++) {channel_Labels[i] = Dialog.getString();}
		font_Size = Dialog.getNumber();
	}
	
	function squareView(){
										C1_C2 = 	Combine_Horizontally(tile[1],tile[2]);
		if (channels==2||channels==4)	C1_C2_Ov =	Combine_Horizontally(C1_C2,tile[0]);
		if (channels==3){				C3_Ov = 	Combine_Horizontally(tile[3],tile[0]); 		Combine_Vertically(C1_C2,C3_Ov);}
		if (channels>=4)				C3_C4 =		Combine_Horizontally(tile[3],tile[4]);
		if (channels==4)							Combine_Vertically(C1_C2_Ov,C3_C4);
		if (channels==5){				C1234 = 	Combine_Vertically(C1_C2,C3_C4); 	C5_Ov =	Combine_Vertically(tile[5],tile[0]); Combine_Horizontally(C1234,C5_Ov);}
	}
	
	function linearView(){
							C1_C2 = Combine_Horizontally(tile[1],tile[2]);
		if (channels==2)			Combine_Horizontally(C1_C2,tile[0]);
		if (channels==3){	C3_Ov = Combine_Horizontally(tile[3],tile[0]);			Combine_Horizontally(C1_C2,C3_Ov);}
		if (channels>=4){	C3_C4 =	Combine_Horizontally(tile[3],tile[4]);	C1234 =	Combine_Horizontally(C1_C2,C3_C4);}
		if (channels==4)			Combine_Horizontally(C1234,tile[0]);
		if (channels==5){	C5_Ov = Combine_Horizontally(tile[5],tile[0]);			Combine_Horizontally(C1234,C5_Ov);}
	}
	
	function verticalView(){
							C1_C2 = Combine_Vertically(tile[1],tile[2]);
		if (channels==2)			Combine_Vertically(C1_C2,tile[0]);
		if (channels==3){	C3_Ov = Combine_Vertically(tile[3],tile[0]);		Combine_Vertically(C1_C2,C3_Ov);}
		if (channels>=4){	C3_C4 =	Combine_Vertically(tile[3],tile[4]);C1234 = Combine_Vertically(C1_C2,C3_C4);}
		if (channels==4)			Combine_Vertically(C1234,tile[0]);
		if (channels==5){	C5_Ov = Combine_Vertically(tile[5],tile[0]);		Combine_Vertically(C1234,C5_Ov);}
	}
	
	function Combine_Horizontally(stack1,stack2){ //returns result image title *.*
		run("Combine...", "stack1=&stack1 stack2=&stack2");
		rename(stack1+"_"+stack2);
		return getTitle();
	}
	
	function Combine_Vertically(stack1,stack2){
		run("Combine...", "stack1=&stack1 stack2=&stack2 combine"); //vertically
		rename(stack1+"_"+stack2);
		return getTitle();
	}
}

var	color_Mode = "Colored";
var	montage_Style = "Linear";
var	labels = 0;
function getSplitViewPrefs(){
	if (nImages == 0) exit();
	Dialog.createNonBlocking("SplitView");
	Dialog.addRadioButtonGroup("color Mode", newArray("Colored","Grayscale"), 1, 3, color_Mode);
	Dialog.addRadioButtonGroup("Montage Style", newArray("Linear","Square","Vertical"), 1, 3, montage_Style);
	Dialog.addSlider("border size", 0, 50, Image.height * 0.02);
	Dialog.addCheckbox("label channels?", labels);
	Dialog.show();
	color_Mode = Dialog.getRadioButton();
	montage_Style = Dialog.getRadioButton();
	borderSize = Dialog.getNumber();
	labels = Dialog.getCheckbox();
	if	   (color_Mode=="Colored"   && montage_Style=="Linear")  { if(labels) SplitView(1,0,1); else SplitView(1,0,0); }
	else if(color_Mode=="Grayscale" && montage_Style=="Linear")  { if(labels) SplitView(0,0,1); else SplitView(0,0,0); }
	else if(color_Mode=="Colored"   && montage_Style=="Square")  { if(labels) SplitView(1,1,1); else SplitView(1,1,0); }
	else if(color_Mode=="Grayscale" && montage_Style=="Square")  { if(labels) SplitView(0,1,1); else SplitView(0,1,0); }
	else if(color_Mode=="Colored"   && montage_Style=="Vertical"){ if(labels) SplitView(1,2,1); else SplitView(1,2,0); }
	else if(color_Mode=="Grayscale" && montage_Style=="Vertical"){ if(labels) SplitView(0,2,1); else SplitView(0,2,0); }
}

macro "About SplitView" {
	showMessage("About SplitView", "SplitView is a visualisation tool for multichannel images with up to 5 channels:\n"
		+"This macro will generate a montage of composite and separated channels in one RGB Image.\n"
		+"You can still navigate through slices or frames.\n \n"
		+"Note: the SplitView image size can be heavy on big hyperstacks due to RGB conversion.\n"
		+"Advice: draw a smaller selection before running Spliview, the produced montage will be croped.\n"
		+"You can choose between color and greyscale for separate channels \n"
		+"and different montage layouts. Also when label is checked, a dialog will ask for channel labels \n"
		+"and add it in the SplitView with color corresponding to each LUTs.");
}

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------
//gamma correction applied on active LUT, no modification of pixels data .
function gammaLUT(gamma, reds, greens, blues) {
	gammaReds = newArray(256); 
	gammaGreens = newArray(256); 
	gammaBlues = newArray(256); 
	gam = newArray(256);
	for (i=0; i<256; i++) gam[i] = pow(i, gamma);
	scale = 255 / gam[255];
	for (i=0; i<256; i++) gam[i] = round(gam[i] * scale);
	for (i=0; i<256; i++) {
		j = gam[i];
		gammaReds[i] = reds[j];
		gammaGreens[i] = greens[j];
		gammaBlues[i] = blues[j];
	}
	setLut(gammaReds, gammaGreens, gammaBlues);
}

/*----------------------------------------------------------------------------------------------------------------------
function for all opened images processing : puts images ID in the all_IDs array : easier to avoid loop errors after.(thanks Jerome)
----------------------------------------------------------------------------------------------------------------------*/
var all_IDs = newArray(1);

function Get_all_IDs() {
	all_IDs = newArray(nImages);
	for (i=0; i<nImages ; i++) {		
		selectImage(i+1);
		all_IDs[i] = getImageID(); 
	} 
}

/*----------------------------------------------------------------------------------------------------------------------
functions for Set LUTs macros
----------------------------------------------------------------------------------------------------------------------*/
var chosen_LUTs = newArray("Cyan","Magenta","Yellow","Grays","Red","Green","Blue");

function Get_LUTs(){
	LUT_list = newArray("Cyan","Magenta","Yellow","Grays","Red","Green","Blue");//Add you favorite or personnal LUTs in the list to see them in dialog.
	Dialog.create("Set all LUTs");
	for(i = 0; i < 7; i++) Dialog.addChoice("LUT " + (i+1), LUT_list, chosen_LUTs[i]);
	Dialog.show();
	for (i = 0; i < 7; i++) chosen_LUTs[i] = Dialog.getChoice();
}

function Set_LUTs(){
	if(nImages == 0) exit("No opened image");
	getDimensions(width, height, channels, slices, frames);
	if(channels > 1){
		Stack.setDisplayMode("composite");
		for (i = 1; i <= channels; i++) {
		Stack.setChannel(i);
		run(chosen_LUTs[i-1]);	
		}
	}
	else {run(chosen_LUTs[0]);}	//need "if / else" because Stack.setChannel doesn't work on single dimension images
} 

function SetAllLUTs(){
	setBatchMode(1);
	Get_all_IDs();
	for (i=0; i<nImages; i++) {
		selectImage(all_IDs[i]);
		if (bitDepth() != 24) Set_LUTs();	
	}
	setBatchMode(0);
}
/*----------------------------------------------------------------------------------------------------------------------
"Set LUTs" applies the chosen LUTs from left to right. Up to five channels.
"Set all LUTs" does the same with all opened images. Images don't need to have same number of channels.
----------------------------------------------------------------------------------------------------------------------*/
macro "Set LUTs"{
	Get_LUTs();
	Set_LUTs();
}

macro "Set all LUTs"{
	Get_LUTs();
	setBatchMode(1);
	Get_all_IDs();
	for (i=0; i<nImages; i++) {
		selectImage(all_IDs[i]);
		if ( bitDepth() != 24) Set_LUTs();	//only if not RGB
	}
	setBatchMode(0);
}

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

/*----------------------------------------------------------------------------------------------------------------------
function for Reset contrast macros :
Reset the contrast window between min and max on active channel
----------------------------------------------------------------------------------------------------------------------*/
function Reset_contrast() {
	if (nImages<1) exit("No image");
	if (bitDepth()==24) exit;
	setBatchMode(1);
	id = getImageID();
	getDimensions(width, height, channels, slices, frames);
	if (slices*frames*channels == 1) {
		getStatistics(area, mean, min, max, std, histogram);
	}
	else if (slices*frames == 1 && channels>1)	{
		Stack.getPosition(channel, slice, frame);
		run("Duplicate...", "title=temp duplicate channels=&channel"); //duplicate only the active channel and name it "A"
		getStatistics(area, mean, min, max, std, histogram);
	}
	else {
		Stack.getPosition(channel, slice, frame);
		run("Duplicate...", "title=temp duplicate channels=&channel");
		Stack.getStatistics(voxelCount, mean, min, max, stdDev);
	}
	selectImage(id);
	setMinAndMax(min, max);
	close("temp");
	setBatchMode(0);
}
/*----------------------------------------------------------------------------------------------------------------------
the getStatistics function only works on single dimension image
the Stack.getStatistics get the min max of entire stacks, but when multiple channels it returns one min max based on all dimensions.
Hence, this macro function had to be adapted to the 3 cases of,
1 slice / 1 color ; 1slice / multiple colors ; multiple slices / multiple colors
----------------------------------------------------------------------------------------------------------------------*/

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast window between min and max on all individual channels
----------------------------------------------------------------------------------------------------------------------*/
macro "Auto-contrast on all channels" {
	if (nImages<1) exit('No image');
    getDimensions(width, height, channels, slices, frames);
	if(channels>1)	{
		for (i = 1; i <= channels; i++) {
			Stack.setChannel(i);
			Reset_contrast();
		}
	}
	else {Reset_contrast();}
}

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast window between min and max on all opened images, for all stacks and individual channels (fairly quickly)
----------------------------------------------------------------------------------------------------------------------*/
macro "Reset all contrasts" {
	Get_all_IDs();
	for (i=0; i<all_IDs.length; i++) {
		showProgress(i/all_IDs.length);
		selectImage(all_IDs[i]);
	    run("Auto-contrast on all channels");	
	}
}

/*----------------------------------------------------------------------------------------------------------------------
Saves all opened images as Tiff in selected directory, but be carefull:
Any image in the directory with same name will be replaced without warning!
----------------------------------------------------------------------------------------------------------------------*/
macro "Save all" {
	if (nImages<1) exit('no image');
	dir = getDirectory("Choose a directory");
	for (i=0;i<nImages;i++) {
        selectImage(i+1);
        title = getTitle;
        saveAs("tiff", dir+title);
        print(title + " saved");
	} 
}

/*----------------------------------------------------------------------------------------------------------------------
This macro will run a maximal intensity projection on all opended images, close the primary stacks and run "Tile".
Can be handy to get a quick overview of multiple hyperstacks.
----------------------------------------------------------------------------------------------------------------------*/
macro "Maximum Z project all" {
	if (nImages<1) exit('no image');
	setBatchMode(1);
	Get_all_IDs();
	for (i=0; i<all_IDs.length; i++) {
		selectImage(all_IDs[i]);
		getDimensions(w, h, channels, slices, frames);
		if (channels*slices*frames!=1) run("Z Project...", "projection=[Max Intensity] all"); 
	}
	for (c=0; c<all_IDs.length ; c++) {	//Close not projected images
		selectImage(all_IDs[c]);
		getDimensions(w, h, channels, slices, frames);
		if (channels*slices*frames!=1) close();
	}
	setBatchMode("exit and display");
	run("Tile");
}

/*----------------------------------------------------------------------------------------------------------------------
Add a line of text on top of the image "info" metadata.
The text is saved in image file.
----------------------------------------------------------------------------------------------------------------------*/
macro "Add note in info"{
	metadata = getMetadata("Info");
	Dialog.create("Add comment on top of info file([i] key)");
	Dialog.addString("note :", "", 100);
	Dialog.show();
	comment = Dialog.getString();
	setMetadata("Info", comment + '\n\n' + metadata);
	run("Show Info...");
}

/*----------------------------------------------------------------------------------------------------------------------
numerical key shortcuts for most common LUTs, [n7] to [n9] are free.
by maintaining space key, you can toggle channels from 1 to 7.
alt key will do the same on all opened images.
----------------------------------------------------------------------------------------------------------------------*/
macro "Gray 	[n0]"{ run("Grays");	}
macro "Blue 	[n1]"{ if (isKeyDown("space")) toggleChannel(1); else if (isKeyDown("alt")) toggleAllchannels(1); else run("Blue");	}
macro "Green 	[n2]"{ if (isKeyDown("space")) toggleChannel(2); else if (isKeyDown("alt")) toggleAllchannels(2); else run("Green");	}
macro "Red 		[n3]"{ if (isKeyDown("space")) toggleChannel(3); else if (isKeyDown("alt")) toggleAllchannels(3); else run("Red");		}
macro "Cyan 	[n4]"{ if (isKeyDown("space")) toggleChannel(4); else if (isKeyDown("alt")) toggleAllchannels(4); else run("Cyan");		}
macro "Magenta 	[n5]"{ if (isKeyDown("space")) toggleChannel(5); else if (isKeyDown("alt")) toggleAllchannels(5); else run("Magenta");	}
macro "Yellow 	[n6]"{ if (isKeyDown("space")) toggleChannel(6); else if (isKeyDown("alt")) toggleAllchannels(6); else run("Yellow");	}
macro "Cyan		[n7]"{ if (isKeyDown("space")) toggleChannel(7); else if (isKeyDown("alt")) toggleAllchannels(7);	}

//toggle channel number (i)
function toggleChannel(i) { //modified from J.Mutterer
	if (nImages<1) exit;
	if (!is("composite")) exit;
	Stack.getActiveChannels(s);
	c=s.substring(i-1,i);
	Stack.setActiveChannels(s.substring(0,i-1)+!c+s.substring(i)); //at the end it looks like Stack.setActiveChannels(1101); 
}

function toggleAllchannels(i) {
	setBatchMode(1);
	for (i=0; i<nImages; i++) {
		selectImage(i+1);
		toggleChannel(i);	}
	showStatus("Channel"+i+" toggled");
	setBatchMode("exit and display");
}

/*----------------------------------------------------------------------------------------------------------------------
key shortcuts for what I think are frequently used commands with opened images. Plus some usefull tricks.
----------------------------------------------------------------------------------------------------------------------*/
macro "my default LUTs  [1]"	{if(isKeyDown("space")) SetAllLUTs(); else Set_LUTs(); }
macro "auto				[A]"	{if(nImages!=0) run("Enhance Contrast", "saturated=0.3");} //almost same as "Auto" button in Brightness tool.
macro "Tile				[E]"	{if(nImages!=0) run("Tile");}
macro "Contrast all Ch	[R]"	{run("Auto-contrast on all channels");}
macro "Auto contrast	[r]"	{if(isKeyDown("space")) run("Install...","install=["+getDirectory("macros")+"/StartupMacros.fiji.ijm]"); else Reset_contrast();} // On active channel only
macro "sync				[y]"	{run("Synchronize Windows");}
macro "Arrange			[q]"	{if(nImages!=0) run("Arrange Channels...");}
macro "SplitView color	[S]"	{SplitView(1,1,0);}
macro "SplitView grey	[p]"	{SplitView(0,0,0);}
macro "Split Channel	[d]"	{if(nImages!=0) run("Split Channels");}
macro "duplicate		[D]"	{if(nImages!=0) run("Duplicate...", "duplicate");}
macro "Merge			[M]"	{if(nImages!=0) run("Merge Channels...");}
macro "Z Project		[g]"	{if(nImages!=0) run("Z Project...");}
macro "Max				[G]"	{if(nImages!=0) run("Z Project...", "projection=[Max Intensity] all");}
macro "Save as tiff		[T]"	{saveAs("Tiff");}

macro "composite switch [Q]" 	{compositeSwitch();}

function compositeSwitch(){
	//	if no preferences yet : ask for it
	is_switch_pref = call("ij.Prefs.get","Composite.switch",0);
	if (is_switch_pref == 0)	set_switch_pref(); 
	//	error check
	if (nImages<1) exit("No image");
	if (!is("composite")) exit("Not a multichannel image");
	//	get pref
	switch_pref = call("ij.Prefs.get","Composite.switch","Color");
	//	Switch!
	if (switch_pref == "Color")	{
		Stack.getDisplayMode(mode);
		if (mode != "composite")	{Stack.setDisplayMode("composite");	} 
		else {Stack.setDisplayMode("color");	}
	}
	if (switch_pref == "Grayscale")	{
		Stack.getDisplayMode(mode);
		if (mode != "composite")	{Stack.setDisplayMode("composite");	}
		else {Stack.setDisplayMode("grayscale");	}
	}
	if (switch_pref == "All modes")	{
		modes=newArray("Composite","Color","Grayscale");
		Stack.getDisplayMode(mode);
		m=0;
		for (i=0;i<modes.length;i++) {
			if (mode==modes[i].toLowerCase()) m=i;	}
			m=(m+1)%3;
			Stack.setDisplayMode(modes[m]);
	}
}

function set_switch_pref() { // for composite switch tool
	Dialog.createNonBlocking("Visualization tools parameters");
	Dialog.addChoice("[Q] key shortcut, you want to switch between composite and :", newArray("Color","Grayscale","All modes"), "Color");
	Dialog.show();
	call("ij.Prefs.set","Composite.switch",Dialog.getChoice());
}
//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

macro "About these tools" {
	Dialog.createNonBlocking("Visualization Toolset description");
	Dialog.addMessage("This toolset intends to help handling and visualization of multichannel images and stacks.\n"+
	"None of these tools will modify the pixels of the images. Only the display.\n"+
	"______________________________________________________________________________\n"+
	"* Multi Tool : \n"+
	"            normal click to move freely images windows (double click on icon to set the main tool)\n"+
	"            shift + drag to adjust min and max contrast\n"+
	"            ctrl or cmd + drag to adjust gamma on the LUT, not on pixels\n"+
	"            alt + drag to navigate slices or frames in stacks\n"+
	"______________________________________________________________________________\n"+
	"* SplitView : icon or press [S] (square colored) or [p] (linear grayscale).\n"+
	"            Creates a RGB montage of composite and splited channels.\n"+
	"            You can still navigate through slices or frames.\n"+
	"            icon let you choose parameters and label channels.\n"+
	"______________________________________________________________________________\n"+
	"* Set image LUTs : Right click on the image and select 'Set LUTs':\n"+
	"            Applies all chosen LUTs (false colors) to your multichannel image.\n"+
	"______________________________________________________________________________\n"+
	"* Auto-contrast min-max : Click on Contrast icon or [r] for one channel, [R] for all.\n"+
	"            Especially usefull for stacks (but not restricted to),this macro\n"+
	"            resets the min and max based on the entire stack so you can navigate\n"+
	"            through slices without signal saturation.\n"+
	"            Tip : if you have bright spots on your stack, draw a ROI first.\n"+
	"______________________________________________________________________________\n"+
	"* gammaLUT : Menu icon\n"+
	"            This tool gives the same visual result than the built-in gamma function\n"+
	"            but only modifies the active LUT, without doing anything to pixels data.\n"+
	"            To reset the original LUT, you just have to apply it again. \n"+
	"______________________________________________________________________________\n"+
	"* Tools for all opended images : in the 'All images menu icon':\n"+
	"           - Maximum Z project all : \n"+
	"                    Run a maximal intensity projection on all opended stacks,\n"+
	"                    and run 'Tile' to see all windows.\n"+
	"           - Save all : \n"+
	"                    Saves all opened images as Tiff in a specified directory.\n"+
	"______________________________________________________________________________\n"+
	"* a handy macro shortcut :\n"+
	"      - [ Q ]   Quickly switch between Color and Composite mode on multichannel images.\n"+
	"      via the Settings icon, you can choose to switch between grayscale and composite\n"+
	"      or cycle the three modes.\n"+
	"______________________________________________________________________________\n"+
	"* Keyboard shortcuts for frequently used commands in Imagej\n"+
	"      All described in the cheat sheet of the ' ? ' menu.\n"+
	"      Press ctrl (pc) or cmd (mac) key to re-access the built-in shortcuts of Imagej",13);
	Dialog.show();
}

macro "Keyboard shortcuts cheat sheet" {
	Dialog.createNonBlocking("keyboard shortcuts");
	Dialog.addMessage("* Macro shortcuts :\n"+
	"[ Q ]___switch color and composite mode\n"+
	"[ R ]___Auto-contrast all channels\n"+
	"[ r ]___Auto-contrast active channel\n"+
	"[ S ]___Colored SplitView\n"+
	"[ p ]___Grayscale SplitView\n"+
	"____________________________________\n"+
	"* Frequently used commands in Imagej: \n"+
	"[ A ]___Run Enhance Contrast, saturated=0.3%\n"+
	"[ E ]___Tile : arrange windows to see all\n"+
	"[ y ]___Open the tool 'synchronize windows'\n"+
	"[ q ]___Change channels order\n"+
	"[ d ]___Split Channels\n"+
	"[ M ]___Merge channels\n"+
	"[ D ]___Duplicate (all dimensions)\n"+
	"[ g ]___Z projection dialog \n"+
	"[ G ]___Maximal intensity projection\n"+
	"[ T ]___Save as Tiff",12);
	Dialog.show();
}

macro "LUTs and channels shortcuts cheat sheet" {
	Dialog.createNonBlocking("numerical keyboard shortcuts");
	Dialog.addMessage("* Apply LUTs :\n"+
	"[ 0 ]___Grayscale\n"+
	"[ 1 ]___Blue\n"+
	"[ 2 ]___Green\n"+
	"[ 3 ]___Red\n"+
	"[ 4 ]___Cyan\n"+
	"[ 5 ]___Magenta\n"+
	"[ 6 ]___Yellow\n"+
	"____________________________________\n"+
	"* maintain space + numerical key\n"+
	"[ 1 ]___Toggle channel 1\n"+
	"[ 2 ]___Toggle channel 2\n"+
	"[ 3 ]___Toggle channel 3\n"+
	"[ 4 ]___Toggle channel 4\n"+
	"[ 5 ]___Toggle channel 5\n"+
	"[ 6 ]___Toggle channel 6\n"+
	"[ 7 ]___Toggle channel 7\n"+
	"maintain ALT to act on all images",13);
	Dialog.show();
}
